% # CaBuffer_PYdr_B12:
%
% Calcium buffer concentration dynamics, for generic pyramidal dendrite
% compartments used in the DynaSim implementation of (Benita et al., 2012).
%
% - Note: This CaBuffer produces calcium in concentations of uM, not mM
%
% - Requires:
%     - "@IHVA_PYdr_B12" exposed by "IHVA_PYdr_B12" mechanism
%
% - Exposes:
%     - calcium concentration "@CaBuffer_PYdr_B12" required for "iKCa_PYdr_B12"
%     mechanism
%
% - References:
%     - Benita, J. M., Guillamon, A., Deco, G., & Sanchez-Vives, M. V. (2012).
%     Synaptic depression and slow oscillatory activity in a biophysical
%     network model of the cerebral cortex. Frontiers in Computational
%     Neuroscience, 6. https://doi.org/10.3389/fncom.2012.00064
%
% - Tags: calcium, intrinsic, pyramidal, dendrite
%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%
% Parameters
tauCa = 150 % ms
% AES
% alphaCa = 0.005 % uM/(nA ms) drive conversion of Ca-modifying currents
alphaCa = 0.005*1000 % uM/(uA ms) drive conversion of Ca-modifying currents
areaDR = 0.00035 % Area of dendrite, 0.035 mm^2 = 0.00035 cm^2

CaBufferIC = 0.000001
CaBufferNoiseIC = 0.0001

% ODEs
% CaBuffer requires input from IHVA, but CaBuffer is only used by IKCa
CaBuffer_PYdr_B12' = max(-alphaCa.*areaDR.*@IHVA_PYdr_B12, 0) - CaBuffer_PYdr_B12./tauCa
CaBuffer_PYdr_B12(0) = CaBufferIC+CaBufferNoiseIC.*rand(1,Npop)

% Interface
@CaBuffer_PYdr_B12 += CaBuffer_PYdr_B12
